def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////////// heart ////////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp heart_simplesimple_type as
    var t: second {pub: in};
    var T: second {pub: in};
    var mt: dimensionless {pub: out};
    var mta: dimensionless {pub: out};
    var delay: dimensionless {pub: in};
    var To_pk: dimensionless {pub: in};
    mt = t/T-floor(t/T);
    mta = t/T-delay-floor((t-delay*T)/T);
    // Left ventricle
    var q_LV_init: litre {pub: in};
    var q_LV_us: litre {pub: in};
    var q_LV: litre {init: q_LV_init, pub: out};
    var u_LV: kPa {pub: out};
    var E_LV: kPa_per_L {pub: out};
    var E_LVmax: kPa_per_L {pub: in};
    var E_LVmin: kPa_per_L {pub: in};
    E_LV = sel
      case mt < 0.4{dimensionless}:
        (E_LVmax-E_LVmin)*mt/To_pk*exp(0.5{dimensionless}*(1{dimensionless}-sqr(mt/To_pk)))+E_LVmin;
      case mt < 0.6{dimensionless}:
        (E_LVmax-E_LVmin)*0.4{dimensionless}/To_pk*exp(0.5{dimensionless}*(1{dimensionless}-sqr(0.4{dimensionless}/To_pk)))+E_LVmin;
      otherwise:
        E_LVmin;
    endsel;
    ode(q_LV, t) = v_MV-v_AV;
    u_LV = E_LV*(q_LV-q_LV_us);
    // Right ventricle
    var q_RV_init: litre {pub: in};
    var q_RV_us: litre {pub: in};
    var q_RV: litre {init: q_RV_init, pub: out};
    var u_RV: kPa {pub: out};
    var E_RV: kPa_per_L {pub: out};
    var E_RVmax: kPa_per_L {pub: in};
    var E_RVmin: kPa_per_L {pub: in};
    E_RV = sel
      case mt < 0.4{dimensionless}:
        (E_RVmax-E_RVmin)*mt/To_pk*exp(0.5{dimensionless}*(1{dimensionless}-sqr(mt/To_pk)))+E_RVmin;
      case mt < 0.6{dimensionless}:
        (E_RVmax-E_RVmin)*0.4{dimensionless}/To_pk*exp(0.5{dimensionless}*(1{dimensionless}-sqr(0.4{dimensionless}/To_pk)))+E_RVmin;
      otherwise:
        E_RVmin;
    endsel;
    ode(q_RV, t) = v_TV-v_PV;
    u_RV = E_RV*(q_RV-q_RV_us);
    // Left atrium
    var q_LA_init: litre {pub: in};
    var q_LA_us: litre {pub: in};
    var q_LA: litre {init: q_LA_init, pub: out};
    var u_LA: kPa {pub: out};
    var E_LA: kPa_per_L {pub: in};
    // boundary conditions
    var v_pvn: L_per_s {pub: in};
    ode(q_LA, t) = v_pvn-v_MV;
    u_LA = E_LA*(q_LA-q_LA_us);
    // Right atrium
    var q_RA_init: litre {pub: in};
    var q_RA_us: litre {pub: in};
    var q_RA: litre {init: q_RA_init, pub: out};
    var u_RA: kPa {pub: out};
    var E_RA: kPa_per_L {pub: in};
    // boundary conditions
    var v_svc: L_per_s {pub: in};
    var v_ivc: L_per_s {pub: in};
    ode(q_RA, t) = v_svc+v_ivc-v_TV;
    u_RA = E_RA*(q_RA-q_RA_us);
    // Aortic valve
    var v_AV: L_per_s {pub: out};
    var R_AV: kPa_s_per_L {pub: in};
    // boundary conditions
    var u_root: kPa {pub: in};
    v_AV = sel
      case u_LV > u_root:
        (u_LV-u_root)/R_AV;
      otherwise:
        0{L_per_s};
    endsel;
    // Pulmonary Valve
    var v_PV: L_per_s {pub: out};
    var R_PV: kPa_s_per_L {pub: in};
    // boundary conditions
    var u_par: kPa {pub: in};
    v_PV = sel
      case u_RV > u_par:
        (u_RV-u_par)/R_PV;
      otherwise:
        0{L_per_s};
    endsel;
    // Tricuspid Valve
    var v_TV: L_per_s {pub: out};
    var R_TV: kPa_s_per_L {pub: in};
    v_TV = sel
      case u_RA > u_RV:
        (u_RA-u_RV)/R_TV;
      otherwise:
        0{L_per_s};
    endsel;
    // Mitral Valve
    var v_MV: L_per_s {pub: out};
    var R_MV: kPa_s_per_L {pub: in};
    v_MV = sel
      case u_LA > u_LV:
        (u_LA-u_LV)/R_MV;
      otherwise:
        0{L_per_s};
    endsel;
    // Total heart volume
    var q: litre {pub: out};
    q = q_RA+q_RV+q_LA+q_LV;
  enddef;
  // standard units used gor CVS modelling modules

  def comp heart_simplesimple_type2 as
    var t: second {pub: in};
    var T: second {pub: in};
    var mt: dimensionless {pub: out};
    var mta: dimensionless {pub: out};
    var delay: dimensionless {pub: in};
    var To_pk: dimensionless {pub: in};
    mt = t/T-floor(t/T);
    mta = t/T-delay-floor((t-delay*T)/T);
    // Left ventricle
    var q_LV_init: m3 {pub: in};
    var q_LV_us: m3 {pub: in};
    var q_LV: m3 {init: q_LV_init, pub: out};
    var u_LV: J_per_m3 {pub: out};
    var E_LV: J_per_m6 {pub: out};
    var E_LVmax: J_per_m6 {pub: in};
    var E_LVmin: J_per_m6 {pub: in};
    E_LV = sel
      case mt < 0.4{dimensionless}:
        (E_LVmax-E_LVmin)*mt/To_pk*exp(0.5{dimensionless}*(1{dimensionless}-sqr(mt/To_pk)))+E_LVmin;
      case mt < 0.6{dimensionless}:
        (E_LVmax-E_LVmin)*0.4{dimensionless}/To_pk*exp(0.5{dimensionless}*(1{dimensionless}-sqr(0.4{dimensionless}/To_pk)))+E_LVmin;
      otherwise:
        E_LVmin;
    endsel;
    ode(q_LV, t) = v_MV-v_AV;
    u_LV = E_LV*(q_LV-q_LV_us);
    // Right ventricle
    var q_RV_init: m3 {pub: in};
    var q_RV_us: m3 {pub: in};
    var q_RV: m3 {init: q_RV_init, pub: out};
    var u_RV: J_per_m3 {pub: out};
    var E_RV: J_per_m6 {pub: out};
    var E_RVmax: J_per_m6 {pub: in};
    var E_RVmin: J_per_m6 {pub: in};
    E_RV = sel
      case mt < 0.4{dimensionless}:
        (E_RVmax-E_RVmin)*mt/To_pk*exp(0.5{dimensionless}*(1{dimensionless}-sqr(mt/To_pk)))+E_RVmin;
      case mt < 0.6{dimensionless}:
        (E_RVmax-E_RVmin)*0.4{dimensionless}/To_pk*exp(0.5{dimensionless}*(1{dimensionless}-sqr(0.4{dimensionless}/To_pk)))+E_RVmin;
      otherwise:
        E_RVmin;
    endsel;
    ode(q_RV, t) = v_TV-v_PV;
    u_RV = E_RV*(q_RV-q_RV_us);
    // Left atrium
    var q_LA_init: m3 {pub: in};
    var q_LA_us: m3 {pub: in};
    var q_LA: m3 {init: q_LA_init, pub: out};
    var u_LA: J_per_m3 {pub: out};
    var E_LA: J_per_m6 {pub: in};
    // boundary conditions
    var v_pvn: m3_per_s {pub: in};
    ode(q_LA, t) = v_pvn-v_MV;
    u_LA = E_LA*(q_LA-q_LA_us);
    // Right atrium
    var q_RA_init: m3 {pub: in};
    var q_RA_us: m3 {pub: in};
    var q_RA: m3 {init: q_RA_init, pub: out};
    var u_RA: J_per_m3 {pub: out};
    var E_RA: J_per_m6 {pub: in};
    // boundary conditions
    var v_svc: m3_per_s {pub: in};
    var v_ivc: m3_per_s {pub: in};
    ode(q_RA, t) = v_svc+v_ivc-v_TV;
    u_RA = E_RA*(q_RA-q_RA_us);
    // Aortic valve
    var v_AV: m3_per_s {pub: out};
    var R_AV: Js_per_m6 {pub: in};
    // boundary conditions
    var u_root: J_per_m3 {pub: in};
    v_AV = sel
      case u_LV > u_root:
        (u_LV-u_root)/R_AV;
      otherwise:
        0{m3_per_s};
    endsel;
    // Pulmonary Valve
    var v_PV: m3_per_s {pub: out};
    var R_PV: Js_per_m6 {pub: in};
    // boundary conditions
    var u_par: J_per_m3 {pub: in};
    v_PV = sel
      case u_RV > u_par:
        (u_RV-u_par)/R_PV;
      otherwise:
        0{m3_per_s};
    endsel;
    // Tricuspid Valve
    var v_TV: m3_per_s {pub: out};
    var R_TV: Js_per_m6 {pub: in};
    v_TV = sel
      case u_RA > u_RV:
        (u_RA-u_RV)/R_TV;
      otherwise:
        0{m3_per_s};
    endsel;
    // Mitral Valve
    var v_MV: m3_per_s {pub: out};
    var R_MV: Js_per_m6 {pub: in};
    v_MV = sel
      case u_LA > u_LV:
        (u_LA-u_LV)/R_MV;
      otherwise:
        0{m3_per_s};
    endsel;
    // Total heart volume
    var q: m3 {pub: out};
    q = q_RA+q_RV+q_LA+q_LV;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////// vascular compartments ////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pv_simple_noI_type as
    var t: second {pub: in};
    var q_init: litre {pub: in};
    var q_0: litre {pub: in};
    var q: litre {init: q_init, pub: out};
    var u: kPa {pub: out};
    var u_0: kPa {pub: in};
    var v: L_per_s {pub: out};
    // consitutive parameters
    // var E: kPa_per_L {pub: in};
    var C: L_per_kPa {pub: in};
    var R: kPa_s_per_L {pub: in};
    // boundary conditions
    var u_in: kPa {pub: in};
    var v_out: L_per_s {pub: in};
    ode(q, t) = v-v_out;
    v = (u_in-u)/R;
    u = u_0+(q-q_0)/C;
  enddef;

  def comp vp_simple_noI_type as
    var t: second {pub: in};
    var q_init: litre {pub: in};
    var q_0: litre {pub: in};
    var q: litre {init: q_init, pub: out};
    var u: kPa {pub: out};
    var u_0: kPa {pub: in};
    var v: L_per_s {pub: out};
    // consitutive parameters
    // var E: kPa_per_L {pub: in};
    var C: L_per_kPa {pub: in};
    var R: kPa_s_per_L {pub: in};
    // boundary conditions
    var v_in: L_per_s {pub: in};
    var u_out: kPa {pub: in};
    ode(q, t) = v_in-v;
    v = (u-u_out)/R;
    u = u_0+(q-q_0)/C;
  enddef;

  def comp pp_simple_noI_type as
    var t: second {pub: in};
    var v: L_per_s {pub: out};
    var v_d: L_per_s {pub: out};
    // constitutive parameters
    var R: kPa_s_per_L {pub: in};
    // boundary conditions
    var u_in: kPa {pub: in};
    var u_out: kPa {pub: in};
    v = (u_in-u_out)/R;
    v_d = v;
  enddef;

  def comp vv_simple_noI_type as
    var t: second {pub: in};
    var q_init: litre {pub: in};
    var q_0: litre {pub: in};
    var q: litre {init: q_init, pub: out};
    var u: kPa {pub: out};
    var u_d: kPa {pub: out};
    var u_0: kPa {pub: in};
    // constitutive parameters
    // var E: kPa_per_L {pub: in};
    var C: L_per_kPa {pub: in};
    // boundary conditions
    var v_in: L_per_s {pub: in};
    var v_out: L_per_s {pub: in};
    ode(q, t) = v_in-v_out;
    u = u_0+(q-q_0)/C;
    u_d = u;
  enddef;

  def comp pv_Nout_noI_type as
    var t: second {pub: in};
    var q_init: litre {pub: in};
    var q_0: litre {pub: in};
    var q: litre {init: q_init, pub: out};
    var u: kPa {pub: out};
    var u_0: kPa {pub: in};
    var v: L_per_s {pub: out};
    // constitutive parameters
    // var E: kPa_per_L {pub: in};
    var C: L_per_kPa {pub: in};
    var R: kPa_s_per_L {pub: in};
    // boundary conditions
    var u_in: kPa {pub: in};
    var v_out_sum: L_per_s {pub: in};
    ode(q, t) = v-v_out_sum;
    v = (u_in-u)/R;
    u = u_0+(q-q_0)/C;
  enddef;

  def comp vv_Nout_noI_type as
    var t: second {pub: in};
    var q_init: litre {pub: in};
    var q_0: litre {pub: in};
    var q: litre {init: q_init, pub: out};
    var u: kPa {pub: out};
    var u_d: kPa {pub: out};
    var u_0: kPa {pub: in};
    // constitutive parameters
    // var E: kPa_per_L {pub: in};
    var C: L_per_kPa {pub: in};
    // boundary conditions
    var v_in: L_per_s {pub: in};
    var v_out_sum: L_per_s {pub: in};
    ode(q, t) = v_in-v_out_sum;
    u = u_0+(q-q_0)/C;
    u_d = u;
  enddef;

  def comp vp_Min_noI_type as
    var t: second {pub: in};
    var q_init: litre {pub: in};
    var q_0: litre {pub: in};
    var q: litre {init: q_init, pub: out};
    var u: kPa {pub: out};
    var u_0: kPa {pub: in};
    var v: L_per_s {pub: out};
    // constitutive parameters
    // var E: kPa_per_L {pub: in};
    var C: L_per_kPa {pub: in};
    var R: kPa_s_per_L {pub: in};
    // boundary conditions
    var v_in_sum: L_per_s {pub: in};
    var u_out: kPa {pub: in};
    ode(q, t) = v_in_sum-v;
    v = (u-u_out)/R;
    u = u_0+(q-q_0)/C;
  enddef;

  def comp vv_Min_noI_type as
    var t: second {pub: in};
    var q_init: litre {pub: in};
    var q_0: litre {pub: in};
    var q: litre {init: q_init, pub: out};
    var u: kPa {pub: out};
    var u_d: kPa {pub: out};
    var u_0: kPa {pub: in};
    // constitutive parameters
    // var E: kPa_per_L {pub: out};
    var C: L_per_kPa {pub: in};
    // boundary conditions
    var v_in_sum: L_per_s {pub: in};
    var v_out: L_per_s {pub: in};
    ode(q, t) = v_in_sum-v_out;
    u = u_0+(q-q_0)/C;
    u_d = u;
  enddef;

  def comp vv_MinNout_noI_type as
    var t: second {pub: in};
    var q_init: litre {pub: in};
    var q_0: litre {pub: in};
    var q: litre {init: q_init, pub: out};
    var u: kPa {pub: out};
    var u_d: kPa {pub: out};
    var u_0: kPa {pub: in};
    // constitutive parameters
    // var E: kPa_per_L {pub: in};
    var C: L_per_kPa {pub: in};
    // boundary conditions
    var v_in_sum: L_per_s {pub: in};
    var v_out_sum: L_per_s {pub: in};
    ode(q, t) = v_in_sum-v_out_sum;
    u = u_0+(q-q_0)/C;
    u_d = u;
  enddef;
  // standard units used gor CVS modelling modules

  def comp pv_simple_noI_type2 as
    var t: second {pub: in};
    var q_init: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var u: J_per_m3 {pub: out};
    var u_0: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    // consitutive parameters
    // var E: J_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    // boundary conditions
    var u_in: J_per_m3 {pub: in};
    var v_out: m3_per_s {pub: in};
    ode(q, t) = v-v_out;
    v = (u_in-u)/R;
    u = u_0+(q-q_0)/C;
  enddef;

  def comp vp_simple_noI_type2 as
    var t: second {pub: in};
    var q_init: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var u: J_per_m3 {pub: out};
    var u_0: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    // consitutive parameters
    // var E: J_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    // boundary conditions
    var v_in: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    ode(q, t) = v_in-v;
    v = (u-u_out)/R;
    u = u_0+(q-q_0)/C;
  enddef;

  def comp pp_simple_noI_type2 as
    var t: second {pub: in};
    var v: m3_per_s {pub: out};
    var v_d: m3_per_s {pub: out};
    // constitutive parameters
    var R: Js_per_m6 {pub: in};
    // boundary conditions
    var u_in: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    v = (u_in-u_out)/R;
    v_d = v;
  enddef;

  def comp vv_simple_noI_type2 as
    var t: second {pub: in};
    var q_init: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var u: J_per_m3 {pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_0: J_per_m3 {pub: in};
    // constitutive parameters
    // var E: J_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    // boundary conditions
    var v_in: m3_per_s {pub: in};
    var v_out: m3_per_s {pub: in};
    ode(q, t) = v_in-v_out;
    u = u_0+(q-q_0)/C;
    u_d = u;
  enddef;

  def comp pv_Nout_noI_type2 as
    var t: second {pub: in};
    var q_init: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var u: J_per_m3 {pub: out};
    var u_0: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    // constitutive parameters
    // var E: J_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    // boundary conditions
    var u_in: J_per_m3 {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    ode(q, t) = v-v_out_sum;
    v = (u_in-u)/R;
    u = u_0+(q-q_0)/C;
  enddef;

  def comp vv_Nout_noI_type2 as
    var t: second {pub: in};
    var q_init: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var u: J_per_m3 {pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_0: J_per_m3 {pub: in};
    // constitutive parameters
    // var E: J_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    // boundary conditions
    var v_in: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    ode(q, t) = v_in-v_out_sum;
    u = u_0+(q-q_0)/C;
    u_d = u;
  enddef;

  def comp vp_Min_noI_type2 as
    var t: second {pub: in};
    var q_init: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var u: J_per_m3 {pub: out};
    var u_0: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    // constitutive parameters
    // var E: J_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    // boundary conditions
    var v_in_sum: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    ode(q, t) = v_in_sum-v;
    v = (u-u_out)/R;
    u = u_0+(q-q_0)/C;
  enddef;

  def comp vv_Min_noI_type2 as
    var t: second {pub: in};
    var q_init: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var u: J_per_m3 {pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_0: J_per_m3 {pub: in};
    // constitutive parameters
    // var E: J_per_m6 {pub: out};
    var C: m6_per_J {pub: in};
    // boundary conditions
    var v_in_sum: m3_per_s {pub: in};
    var v_out: m3_per_s {pub: in};
    ode(q, t) = v_in_sum-v_out;
    u = u_0+(q-q_0)/C;
    u_d = u;
  enddef;

  def comp vv_MinNout_noI_type2 as
    var t: second {pub: in};
    var q_init: m3 {pub: in};
    var q_0: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var u: J_per_m3 {pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_0: J_per_m3 {pub: in};
    // constitutive parameters
    // var E: J_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    // boundary conditions
    var v_in_sum: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    ode(q, t) = v_in_sum-v_out_sum;
    u = u_0+(q-q_0)/C;
    u_d = u;
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// blood volume /////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp sum_blood_vol_type as
    var t: second {pub: in};
    var q: litre {pub: out};
    // boundary conditions
    var q_sum: litre {pub: in};
    q = q_sum;
  enddef;
  // standard units used gor CVS modelling modules

  def comp sum_blood_vol_type2 as
    var t: second {pub: in};
    var q: m3 {pub: out};
    // boundary conditions
    var q_sum: m3 {pub: in};
    q = q_sum;
  enddef;
enddef;
