def model PhLynxGenerated_v0_4_1 as
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp global_parameters as
    var R: J_per_mol_K {init: 8.314, interface: public};
    var F: C_per_mol {init: 96485, interface: public};
    var T: kelvin {init: 310.15, interface: public};
    var N_avo: per_mol {init: 6.02e+23, interface: public};
  enddef;

  def comp instance_parameters as
    var soma_SN_c_ER_pre: dimensionless {init: 0.049, interface: public};
    var soma_SN_c_ER: dimensionless {init: 0.01, interface: public};
    var soma_SN_c_SL: dimensionless {init: 0.02, interface: public};
    var soma_SN_epsilon_tau: second {init: 1e-4, interface: public};
    var soma_SN_Vol: m3 {init: 2e-15, interface: public};
    var I_in: nanoA {init: 0, interface: public};
    var Cm: picoF {init: 30, interface: public};
    var soma_SN_V_rest_approx: milliV {init: -70, interface: public};
    var C_sensed: picoF {init: 2, interface: public};
    var R_diffSensed: megaOhm {init: 10, interface: public};
    var g_Na: microS {init: 2.3, interface: public};
    var g_Na_mod: dimensionless {init: 1, interface: public};
    var V_mid_m: milliV {init: 20, interface: public};
    var V_den_m: milliV {init: 6, interface: public};
    var V_mid_h: milliV {init: 40, interface: public};
    var V_den_h: milliV {init: 4, interface: public};
    var tau_h_min: millis {init: 0.15, interface: public};
    var tau_h_max: millis {init: 5, interface: public};
    var k_thresh_m: milliV {init: 0, interface: public};
    var k_thresh_h: milliV {init: 0, interface: public};
    var g_Na1_6: microS {init: 0.5, interface: public};
    var g_Na1_6_mod: dimensionless {init: 1, interface: public};
    var V_mid_m_Na1_6: milliV {init: 36, interface: public};
    var V_den_m_Na1_6: milliV {init: 8, interface: public};
    var V_mid_h_Na1_6: milliV {init: 53.2, interface: public};
    var V_den_h_Na1_6: milliV {init: 8, interface: public};
    var tau_h_Na1_6_min: millis {init: 0.15, interface: public};
    var tau_h_Na1_6_max: millis {init: 300, interface: public};
    var p_Ca: m3_per_s {init: 4e-14, interface: public};
    var soma_SN_tau_hc: millis {init: 20, interface: public};
    var soma_SN_tau_c_min: millis {init: 0.2, interface: public};
    var soma_SN_tau_c_max: millis {init: 3, interface: public};
    var soma_SN_V_mid_c: milliV {init: 8.1, interface: public};
    var soma_SN_V_den_c: milliV {init: 5, interface: public};
    var g_Kv2: microS {init: 0.0013333, interface: public};
    var V_mid_m_Kv2: milliV {init: 6, interface: public};
    var V_den_m_Kv2: milliV {init: 8, interface: public};
    var g_Kv1_5: microS {init: 0.08878493886, interface: public};
    var V_mid_m_Kv1_5: milliV {init: 6, interface: public};
    var V_den_m_Kv1_5: milliV {init: 6.4, interface: public};
    var V_mid_h_Kv1_5: milliV {init: 25.3, interface: public};
    var V_den_h_Kv1_5: milliV {init: 3.5, interface: public};
    var g_Kv4_2: microS {init: 0.1, interface: public};
    var tau_h_Kv4_2: millis {init: 7, interface: public};
    var V_mid_m_Kv4_2: milliV {init: 18.8, interface: public};
    var V_den_m_Kv4_2: milliV {init: 16.6, interface: public};
    var V_mid_h_Kv4_2: milliV {init: 81.6, interface: public};
    var V_den_h_Kv4_2: milliV {init: 6.7, interface: public};
    var g_KCa_BK: microS {init: 0.2, interface: public};
    var h_BK_min: dimensionless {init: 0.085, interface: public};
    var z_BK_coeff: millimolar {init: 0.001, interface: public};
    var V_den_m_BK: milliV {init: 6.2, interface: public};
    var V_mid_h_BK: milliV {init: 26, interface: public};
    var V_den_h_BK: milliV {init: 5.8, interface: public};
    var tau_z_BK: millis {init: 5, interface: public};
    var g_KCa_SK: microS {init: 0.005, interface: public};
    var g_KCa_SK_mod: dimensionless {init: 1, interface: public};
    var tau_m_SK: millis {init: 5, interface: public};
    var Ca_mid_m_SK: millimolar {init: 0.0003, interface: public};
    var p_SK: dimensionless {init: 4, interface: public};
    var g_M: microS {init: 0.00389, interface: public};
    var g_M_mod: dimensionless {init: 1, interface: public};
    var soma_SN_cAMP: dimensionless {init: 0.01, interface: public};
    var delta_gM: microS {init: 0, interface: public};
    var tau_w_num: millis {init: 1200, interface: public};
    var V_mid_w: milliV {init: 35, interface: public};
    var Delta_V_mid_w: milliV {init: 0, interface: public};
    var V_den_w: milliV {init: 10, interface: public};
    var tau_w_min: millis {init: 30, interface: public};
    var g_leak_Na: microS {init: 0.0003, interface: public};
    var g_leak_K: microS {init: 0.0001, interface: public};
    var soma_SN_k_NaCa: nanoA {init: 300, interface: public};
    var soma_SN_alpha_NaCa: dimensionless {init: 1.2, interface: public};
    var soma_SN_gamma_NaCa: dimensionless {init: 0.35, interface: public};
    var soma_SN_Ksat: dimensionless {init: 0.1, interface: public};
    var soma_SN_KmCa: millimolar {init: 1.38, interface: public};
    var soma_SN_KmNai: millimolar {init: 87.5, interface: public};
    var k_NaK: nanoA {init: 0.4, interface: public};
    var Nai_mid_NaK: millimolar {init: 40, interface: public};
    var Ko_mid_NaK: millimolar {init: 1, interface: public};
    var Nai_power_NaK: dimensionless {init: 1.5, interface: public};
    var soma_SN_k_IP3: m3_per_s {init: 0, interface: public};
    var soma_SN_k_leak_Ca: m3_per_s {init: 1e-17, interface: public};
    var soma_SN_h_IP3_init: dimensionless {init: 0.99, interface: public};
    var soma_SN_IP3: millimolar {init: 0.0002, interface: public};
    var soma_SN_a_2: per_millimolar {init: 200, interface: public};
    var soma_SN_d_1: millimolar {init: 0.00013, interface: public};
    var soma_SN_d_2: millimolar {init: 0.001049, interface: public};
    var soma_SN_d_3: millimolar {init: 0.000943, interface: public};
    var soma_SN_d_5: millimolar {init: 0.00008234, interface: public};
    var soma_SN_K_mf: millimolar {init: 0.0001, interface: public};
    var soma_SN_K_mr: millimolar {init: 0.5, interface: public};
    var soma_SN_k_SERCA: mol_per_s {init: 3e-16, interface: public};
    var soma_SN_H_SERCA: dimensionless {init: 1.787, interface: public};
    var soma_SN_k_RyR: m3_per_s {init: 1.5e-13, interface: public};
    var soma_SN_c_RyR_init: dimensionless {init: 0.0, interface: public};
    var soma_SN_hc_RyR_init: dimensionless {init: 1.0, interface: public};
    var soma_SN_Cai_RyR_mid: millimolar {init: 0.0008, interface: public};
    var soma_SN_Cai_RyR_den: millimolar {init: 0.0001, interface: public};
    var soma_SN_Ca_ER_RyR_mid: millimolar {init: 0.5, interface: public};
    var soma_SN_Ca_ER_RyR_den: millimolar {init: 0.03, interface: public};
    var soma_SN_Ca_ER_RyR_tau_mid: millimolar {init: 0.3, interface: public};
    var soma_SN_Ca_ER_RyR_tau_den: millimolar {init: 0.01, interface: public};
    var soma_SN_tau_c_RyR: millis {init: 0.01, interface: public};
    var soma_SN_tau_hc_RyR: millis {init: 10, interface: public};
    var soma_SN_Cai_init: millimolar {init: 0.0001, interface: public};
    var soma_SN_Ca_ER_init: millimolar {init: 0.6, interface: public};
    var soma_SN_Cao: millimolar {init: 2, interface: public};
    var soma_SN_D_Ca: m3_per_s {init: 6e-12, interface: public};
    var soma_SN_D_Ca_ER: m3_per_s {init: 4.8e-15, interface: public};
    var soma_SN_B_Ca_init: millimolar {init: 7.95, interface: public};
    var soma_SN_B_Ca_total: millimolar {init: 8, interface: public};
    var soma_SN_k_bind_Ca: per_millimolar_s {init: 100000, interface: public};
    var soma_SN_k_unbind_Ca: per_s {init: 8000, interface: public};
    var soma_SN_k_bind_Ca_ER: per_millimolar_s {init: 500, interface: public};
    var soma_SN_k_unbind_Ca_ER: per_s {init: 8000, interface: public};
    var Nai_init: millimolar {init: 13, interface: public};
    var soma_SN_Nao: millimolar {init: 145, interface: public};
    var Ki_init: millimolar {init: 150, interface: public};
    var Ko: millimolar {init: 4.5, interface: public};
    var C: picoF {init: 10, interface: public};
    var R: megaOhm {init: 300, interface: public};
    var axon_SN_V_rest_approx: milliV {init: -70, interface: public};
    var channel_ratio: dimensionless {init: 0.5, interface: public};
    var var_SN_epsilon_tau: second {init: 1e-4, interface: public};
    var var_SN_Vol: m3 {init: 1e-18, interface: public};
    var var_SN_c_ER_pre: dimensionless {init: 0.049, interface: public};
    var var_SN_c_ER: dimensionless {init: 0.01, interface: public};
    var var_SN_c_SL: dimensionless {init: 0.02, interface: public};
    var var_SN_cAMP: dimensionless {init: 0.01, interface: public};
    var g_CaN: microS {init: 0.00001, interface: public};
    var c_init: dimensionless {init: 0.01, interface: public};
    var hc_init: dimensionless {init: 0.9, interface: public};
    var var_SN_tau_hc: millis {init: 20, interface: public};
    var var_SN_tau_c_min: millis {init: 0.2, interface: public};
    var var_SN_tau_c_max: millis {init: 3, interface: public};
    var var_SN_V_mid_c: milliV {init: 8.1, interface: public};
    var var_SN_V_den_c: milliV {init: 5, interface: public};
    var Nai: millimolar {init: 13, interface: public};
    var var_SN_Nao: millimolar {init: 145, interface: public};
    var var_SN_k_NaCa: nanoA {init: 0.15, interface: public};
    var var_SN_alpha_NaCa: dimensionless {init: 1.2, interface: public};
    var var_SN_gamma_NaCa: dimensionless {init: 0.35, interface: public};
    var var_SN_Ksat: dimensionless {init: 0.1, interface: public};
    var var_SN_KmCa: millimolar {init: 1.38, interface: public};
    var var_SN_KmNai: millimolar {init: 87.5, interface: public};
    var var_SN_k_IP3: m3_per_s {init: 0, interface: public};
    var var_SN_k_leak_Ca: m3_per_s {init: 2e-20, interface: public};
    var var_SN_h_IP3_init: dimensionless {init: 0.99, interface: public};
    var var_SN_IP3: millimolar {init: 0.0002, interface: public};
    var var_SN_a_2: per_millimolar {init: 200, interface: public};
    var var_SN_d_1: millimolar {init: 0.00013, interface: public};
    var var_SN_d_2: millimolar {init: 0.001049, interface: public};
    var var_SN_d_3: millimolar {init: 0.000943, interface: public};
    var var_SN_d_5: millimolar {init: 0.00008234, interface: public};
    var var_SN_K_mf: millimolar {init: 0.0001, interface: public};
    var var_SN_K_mr: millimolar {init: 0.5, interface: public};
    var var_SN_k_SERCA: mol_per_s {init: 1.5e-19, interface: public};
    var var_SN_H_SERCA: dimensionless {init: 1.787, interface: public};
    var var_SN_k_RyR: m3_per_s {init: 7.5e-17, interface: public};
    var var_SN_c_RyR_init: dimensionless {init: 0.0, interface: public};
    var var_SN_hc_RyR_init: dimensionless {init: 1.0, interface: public};
    var var_SN_Cai_RyR_mid: millimolar {init: 0.0008, interface: public};
    var var_SN_Cai_RyR_den: millimolar {init: 0.0001, interface: public};
    var var_SN_Ca_ER_RyR_mid: millimolar {init: 0.5, interface: public};
    var var_SN_Ca_ER_RyR_den: millimolar {init: 0.03, interface: public};
    var var_SN_Ca_ER_RyR_tau_mid: millimolar {init: 0.3, interface: public};
    var var_SN_Ca_ER_RyR_tau_den: millimolar {init: 0.01, interface: public};
    var var_SN_tau_c_RyR: millis {init: 0.01, interface: public};
    var var_SN_tau_hc_RyR: millis {init: 10, interface: public};
    var var_SN_Cai_init: millimolar {init: 0.0001, interface: public};
    var var_SN_Ca_ER_init: millimolar {init: 0.6, interface: public};
    var var_SN_Cao: millimolar {init: 2, interface: public};
    var var_SN_D_Ca: m3_per_s {init: 3e-15, interface: public};
    var var_SN_D_Ca_ER: m3_per_s {init: 2.4e-18, interface: public};
    var var_SN_B_Ca_init: millimolar {init: 7.95, interface: public};
    var var_SN_B_Ca_total: millimolar {init: 8, interface: public};
    var var_SN_k_bind_Ca: per_millimolar_s {init: 100000, interface: public};
    var var_SN_k_unbind_Ca: per_s {init: 8000, interface: public};
    var var_SN_k_bind_Ca_ER: per_millimolar_s {init: 500, interface: public};
    var var_SN_k_unbind_Ca_ER: per_s {init: 8000, interface: public};
    var NE_init: millimolar {init: 0, interface: public};
    var Cai_NE_base: millimolar {init: 0.0001, interface: public};
    var k_NE: per_s {init: 200, interface: public};
    var k_NET: per_s {init: 100, interface: public};
  enddef;

  def comp soma_SN as
    var t: second {interface: public};
    var R: J_per_mol_K {interface: public};
    var F: C_per_mol {interface: public};
    var T: kelvin {interface: public};
    var c_ER_pre: dimensionless {interface: public};
    var c_ER: dimensionless {interface: public};
    var c_SL: dimensionless {interface: public};
    var c_bulk: dimensionless {interface: public};
    var epsilon_tau: second {interface: public};
    var Vol: m3 {interface: public};
    var I_in: nanoA {interface: public};
    var I_out: nanoA {interface: public};
    var E_K: milliV {interface: public};
    var E_Na: milliV {interface: public};
    var E_K_init: milliV {interface: public};
    var E_Na_init: milliV {interface: public};
    var Cm: picoF {interface: public};
    var V_rest_approx: milliV {interface: public};
    var V: milliV {init: V_rest_approx, interface: public};
    var V_sensed: milliV {init: V_rest_approx, interface: public};
    var C_sensed: picoF {interface: public};
    var I_in_delayed: nanoA {interface: public};
    var R_diffSensed: megaOhm {interface: public};
    var i_Na: nanoA {interface: public};
    var g_Na: microS {interface: public};
    var g_Na_mod: dimensionless {interface: public};
    var m_init: dimensionless {interface: public};
    var m: dimensionless {init: m_init, interface: public};
    var h_init: dimensionless {interface: public};
    var h: dimensionless {init: h_init, interface: public};
    var V_mid_m: milliV {interface: public};
    var V_den_m: milliV {interface: public};
    var V_mid_h: milliV {interface: public};
    var V_den_h: milliV {interface: public};
    var m_inf: dimensionless {interface: public};
    var h_inf: dimensionless {interface: public};
    var tau_m: millis {interface: public};
    var tau_h: millis {interface: public};
    var tau_h_min: millis {interface: public};
    var tau_h_max: millis {interface: public};
    var k_thresh_m: milliV {interface: public};
    var k_thresh_h: milliV {interface: public};
    var i_Na1_6: nanoA {interface: public};
    var g_Na1_6: microS {interface: public};
    var g_Na1_6_mod: dimensionless {interface: public};
    var m_Na1_6_init: dimensionless {interface: public};
    var m_Na1_6: dimensionless {init: m_init, interface: public};
    var h_Na1_6_init: dimensionless {interface: public};
    var h_Na1_6: dimensionless {init: h_init, interface: public};
    var V_mid_m_Na1_6: milliV {interface: public};
    var V_den_m_Na1_6: milliV {interface: public};
    var V_mid_h_Na1_6: milliV {interface: public};
    var V_den_h_Na1_6: milliV {interface: public};
    var m_Na1_6_inf: dimensionless {interface: public};
    var h_Na1_6_inf: dimensionless {interface: public};
    var tau_m_Na1_6: millis {interface: public};
    var tau_h_Na1_6: millis {interface: public};
    var tau_h_Na1_6_min: millis {interface: public};
    var tau_h_Na1_6_max: millis {interface: public};
    var i_Ca_L: nanoA {interface: public};
    var p_Ca: m3_per_s {interface: public};
    var c_init: dimensionless {interface: public};
    var c: dimensionless {init: c_init, interface: public};
    var hc_init: dimensionless {interface: public};
    var hc: dimensionless {init: hc_init, interface: public};
    var c_inf: dimensionless {interface: public};
    var hc_inf: dimensionless {interface: public};
    var tau_c: millis {interface: public};
    var tau_hc: millis {interface: public};
    var tau_c_min: millis {interface: public};
    var tau_c_max: millis {interface: public};
    var V_mid_c: milliV {interface: public};
    var V_den_c: milliV {interface: public};
    var V_mid_hc: milliV {interface: public};
    var V_den_hc: milliV {interface: public};
    var i_Kv2: nanoA {interface: public};
    var g_Kv2: microS {interface: public};
    var m_Kv2_init: dimensionless {interface: public};
    var m_Kv2: dimensionless {init: m_Kv2_init, interface: public};
    var m_Kv2_inf: dimensionless {interface: public};
    var tau_m_Kv2: millis {interface: public};
    var V_mid_m_Kv2: milliV {interface: public};
    var V_den_m_Kv2: milliV {interface: public};
    var i_Kv1_5: nanoA {interface: public};
    var g_Kv1_5: microS {interface: public};
    var m_Kv1_5_init: dimensionless {interface: public};
    var m_Kv1_5: dimensionless {init: m_Kv1_5_init, interface: public};
    var h_Kv1_5_init: dimensionless {interface: public};
    var h_Kv1_5: dimensionless {init: h_Kv1_5_init, interface: public};
    var m_Kv1_5_inf: dimensionless {interface: public};
    var h_Kv1_5_inf: dimensionless {interface: public};
    var tau_m_Kv1_5: millis {interface: public};
    var tau_h_Kv1_5: millis {interface: public};
    var V_mid_m_Kv1_5: milliV {interface: public};
    var V_den_m_Kv1_5: milliV {interface: public};
    var V_mid_h_Kv1_5: milliV {interface: public};
    var V_den_h_Kv1_5: milliV {interface: public};
    var i_Kv4_2: nanoA {interface: public};
    var g_Kv4_2: microS {interface: public};
    var m_Kv4_2_init: dimensionless {interface: public};
    var m_Kv4_2: dimensionless {init: m_Kv4_2_init, interface: public};
    var h_Kv4_2_init: dimensionless {interface: public};
    var h_Kv4_2: dimensionless {init: h_Kv4_2_init, interface: public};
    var m_Kv4_2_inf: dimensionless {interface: public};
    var h_Kv4_2_inf: dimensionless {interface: public};
    var tau_m_Kv4_2: millis {interface: public};
    var tau_h_Kv4_2: millis {interface: public};
    var V_mid_m_Kv4_2: milliV {interface: public};
    var V_den_m_Kv4_2: milliV {interface: public};
    var V_mid_h_Kv4_2: milliV {interface: public};
    var V_den_h_Kv4_2: milliV {interface: public};
    var g_KCa_BK: microS {interface: public};
    var i_KCa_BK: nanoA {interface: public};
    var m_BK: dimensionless {init: m_BK_init, interface: public};
    var m_BK_inf: dimensionless {interface: public};
    var m_BK_init: dimensionless {interface: public};
    var h_BK_min: dimensionless {interface: public};
    var h_BK: dimensionless {init: h_BK_init, interface: public};
    var h_BK_inf: dimensionless {interface: public};
    var h_BK_init: dimensionless {interface: public};
    var z_BK: dimensionless {init: z_BK_init, interface: public};
    var z_BK_inf: dimensionless {interface: public};
    var z_BK_init: dimensionless {interface: public};
    var z_BK_coeff: millimolar {interface: public};
    var V_mid_m_BK: milliV {interface: public};
    var V_den_m_BK: milliV {interface: public};
    var V_mid_h_BK: milliV {interface: public};
    var V_den_h_BK: milliV {interface: public};
    var tau_m_BK: millis {interface: public};
    var tau_h_BK: millis {interface: public};
    var tau_z_BK: millis {interface: public};
    var i_KCa_SK: nanoA {interface: public};
    var g_KCa_SK: microS {interface: public};
    var g_KCa_SK_mod: dimensionless {interface: public};
    var m_SK: dimensionless {init: m_SK_init, interface: public};
    var m_SK_inf: dimensionless {interface: public};
    var m_SK_init: dimensionless {interface: public};
    var tau_m_SK: millis {interface: public};
    var Ca_mid_m_SK: millimolar {interface: public};
    var p_SK: dimensionless {interface: public};
    var i_M: nanoA {interface: public};
    var g_M: microS {interface: public};
    var g_M_mod: dimensionless {interface: public};
    var w_init: dimensionless {interface: public};
    var w: dimensionless {init: w_init, interface: public};
    var w_inf: dimensionless {interface: public};
    var cAMP: dimensionless {interface: public};
    var tau_w: millis {interface: public};
    var delta_gM: microS {interface: public};
    var tau_w_num: millis {interface: public};
    var V_mid_w: milliV {interface: public};
    var Delta_V_mid_w: milliV {interface: public};
    var V_den_w: milliV {interface: public};
    var tau_w_min: millis {interface: public};
    var i_leak_Na: nanoA {interface: public};
    var i_leak_K: nanoA {interface: public};
    var g_leak_Na: microS {interface: public};
    var g_leak_K: microS {interface: public};
    var i_NaCa: nanoA {interface: public};
    var k_NaCa: nanoA {interface: public};
    var alpha_NaCa: dimensionless {interface: public};
    var gamma_NaCa: dimensionless {interface: public};
    var Ksat: dimensionless {interface: public};
    var KmCa: millimolar {interface: public};
    var KmNai: millimolar {interface: public};
    var i_NaK: nanoA {interface: public};
    var k_NaK: nanoA {interface: public};
    var Nai_mid_NaK: millimolar {interface: public};
    var Ko_mid_NaK: millimolar {interface: public};
    var Nai_power_NaK: dimensionless {interface: public};
    var j_IP3: mol_per_s {interface: public};
    var k_IP3: m3_per_s {interface: public};
    var k_leak_Ca: m3_per_s {interface: public};
    var m_IP3_inf: dimensionless {interface: public};
    var h_IP3_init: dimensionless {interface: public};
    var h_IP3: dimensionless {init: h_IP3_init, interface: public};
    var h_IP3_inf: dimensionless {interface: public};
    var tau_hIP3: millis {interface: public};
    var IP3: millimolar {interface: public};
    var a_2: per_millimolar {interface: public};
    var d_1: millimolar {interface: public};
    var d_2: millimolar {interface: public};
    var d_3: millimolar {interface: public};
    var d_5: millimolar {interface: public};
    var Q_2: millimolar {interface: public};
    var j_leak_Ca: mol_per_s {interface: public};
    var K_mf: millimolar {interface: public};
    var K_mr: millimolar {interface: public};
    var k_SERCA: mol_per_s {interface: public};
    var H_SERCA: dimensionless {interface: public};
    var j_SERCA: mol_per_s {interface: public};
    var j_RyR: mol_per_s {interface: public};
    var k_RyR: m3_per_s {interface: public};
    var c_RyR_inf: dimensionless {interface: public};
    var hc_RyR_inf: dimensionless {interface: public};
    var c_RyR: dimensionless {init: c_RyR_init, interface: public};
    var c_RyR_init: dimensionless {interface: public};
    var hc_RyR: dimensionless {init: hc_RyR_init, interface: public};
    var hc_RyR_init: dimensionless {interface: public};
    var Cai_RyR_mid: millimolar {interface: public};
    var Cai_RyR_den: millimolar {interface: public};
    var Ca_ER_RyR_mid: millimolar {interface: public};
    var Ca_ER_RyR_den: millimolar {interface: public};
    var Ca_ER_RyR_tau_mid: millimolar {interface: public};
    var Ca_ER_RyR_tau_den: millimolar {interface: public};
    var tau_c_RyR: millis {interface: public};
    var tau_hc_RyR: millis {interface: public};
    var Cai_init: millimolar {interface: public};
    var Cai: millimolar {init: Cai_init, interface: public};
    var Ca_ER_init: millimolar {interface: public};
    var Ca_ER: millimolar {init: Ca_ER_init, interface: public};
    var Cao: millimolar {interface: public};
    var j_Ca_L: mol_per_s {interface: public};
    var j_NaCa_Ca: mol_per_s {interface: public};
    var Ca_bulk: millimolar {init: Cai_init, interface: public};
    var j_diffCa: mol_per_s {interface: public};
    var D_Ca: m3_per_s {interface: public};
    var j_diffCa_ER: mol_per_s {interface: public};
    var D_Ca_ER: m3_per_s {interface: public};
    var Ca_ER_pre: millimolar {init: Ca_ER_init, interface: public};
    var B_Cai: millimolar {init: B_Ca_init, interface: public};
    var B_Ca_init: millimolar {interface: public};
    var B_Ca_total: millimolar {interface: public};
    var CaB_Cai: millimolar {interface: public};
    var B_Ca_bulk: millimolar {init: B_Ca_init, interface: public};
    var CaB_Ca_bulk: millimolar {interface: public};
    var B_Ca_ER_pre: millimolar {init: B_Ca_init, interface: public};
    var CaB_Ca_ER_pre: millimolar {interface: public};
    var k_bind_Ca: per_millimolar_s {interface: public};
    var k_unbind_Ca: per_s {interface: public};
    var k_bind_Ca_ER: per_millimolar_s {interface: public};
    var k_unbind_Ca_ER: per_s {interface: public};
    var Nai_init: millimolar {interface: public};
    var Nai: millimolar {init: Nai_init, interface: public};
    var Nao: millimolar {interface: public};
    var j_Na: mol_per_s {interface: public};
    var j_Na1_6: mol_per_s {interface: public};
    var j_NaCa_Na: mol_per_s {interface: public};
    var j_NaK_Na: mol_per_s {interface: public};
    var j_leak_Na: mol_per_s {interface: public};
    var Ki_init: millimolar {interface: public};
    var Ki: millimolar {init: Ki_init, interface: public};
    var Ko: millimolar {interface: public};
    var j_Kv1_5: mol_per_s {interface: public};
    var j_Kv4_2: mol_per_s {interface: public};
    var j_Kv2: mol_per_s {interface: public};
    var j_KCa_BK: mol_per_s {interface: public};
    var j_KCa_SK: mol_per_s {interface: public};
    var j_KM: mol_per_s {interface: public};
    var j_NaK_K: mol_per_s {interface: public};
    var j_leak_K: mol_per_s {interface: public};
    c_bulk = 1{dimensionless}-c_SL-c_ER-c_ER_pre;
    E_K = R*T/F*ln(Ko/Ki)*1000{milliV_per_V};
    E_Na = R*T/F*ln(Nao/Nai)*1000{milliV_per_V};
    E_K_init = R*T/F*ln(Ko/Ki_init)*1000{milliV_per_V};
    E_Na_init = R*T/F*ln(Nao/Nai_init)*1000{milliV_per_V};
    ode(V, t) = -1e6{milliV_per_kiloV}*(i_Na+i_Na1_6+i_Ca_L+i_Kv2+i_Kv1_5+i_Kv4_2+i_KCa_BK+i_KCa_SK+i_M+i_NaCa+i_NaK+i_leak_Na+i_leak_K+I_in_delayed+I_out)/Cm;
    ode(V_sensed, t) = -1e6{milliV_per_kiloV}*(I_in-I_in_delayed)/C_sensed;
    I_in_delayed = -(V_sensed-V)/R_diffSensed;
    m_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m)/V_den_m));
    h_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h)/V_den_h));
    // j_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_j)/V_den_j));
    m_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m)/V_den_m));
    h_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h)/V_den_h));
    // j_inf  = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_j)/V_den_j));
    // I changed tau_m so it is dependent on V_mid_h.
    // I have made sure it has the same maximum tau_m as in Beluzzi1991 easier to fit.
    // TODO Need to compare this to experimental data.
    // tau_m = 0.06{millis} + 1{dimensionless}/(42.98{per_millis}*exp(0.08915{per_milliV}*V)+0.9230{per_millis}*exp(-0.03351{per_milliV}*V));
    tau_m = 0.06{millis}+0.8{millis}/(exp((V_mid_m+10{milliV}+V)/10{milliV})+exp(-(V_mid_m+10{milliV}+V)/20{milliV}));
    // This tau_h equation has been modified. Make sure it is consistant with experimental data
    // I changed it to increase restitution period of the Na Channel, stays closed for longer after firing, and to simplify it.
    // tau_h     = tau_h_min+(tau_h_max-tau_h_min)/(1{dimensionless}+exp(-(V_mid_h+10{milliV}+V)/14{milliV})+exp((V_mid_h-20{milliV}+V)/1.556{milliV}));
    tau_h = tau_h_min+(tau_h_max-tau_h_min)/(1{dimensionless}+exp(-(V_mid_h+10{milliV}+V)/14{milliV})+exp((V_mid_h-20{milliV}+V)/2{milliV}));
    // tau_j     = tau_j_min+(tau_j_max-tau_j_min)/(1{dimensionless}+exp(-(V_mid_j+10{milliV}+V)/14{milliV})+exp((V_mid_j-20{milliV}+V)/2{milliV}));
    ode(m, t) = (m_inf-m)/(abs(tau_m/1000{millis_per_s})+epsilon_tau);
    ode(h, t) = (h_inf-h)/(abs(tau_h/1000{millis_per_s})+epsilon_tau);
    // ode(j, t) = (j_inf-j)/(abs(tau_j/1000{millis_per_s})+epsilon_tau);
    i_Na = g_Na*g_Na_mod*(V-E_Na)*pow(m, 3{dimensionless})*h;
    m_Na1_6_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Na1_6)/V_den_m_Na1_6));
    h_Na1_6_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Na1_6)/V_den_h_Na1_6));
    // j_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_j)/V_den_j));
    m_Na1_6_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Na1_6)/V_den_m_Na1_6));
    h_Na1_6_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Na1_6)/V_den_h_Na1_6));
    tau_m_Na1_6 = 0.06{millis}+0.8{millis}/(exp((V_mid_m_Na1_6+10{milliV}+V)/10{milliV})+exp(-(V_mid_m_Na1_6+10{milliV}+V)/20{milliV}));
    tau_h_Na1_6 = tau_h_Na1_6_min+(tau_h_Na1_6_max-tau_h_Na1_6_min)/(1{dimensionless}+exp(-(V_mid_h_Na1_6+10{milliV}+V)/14{milliV})+exp((V_mid_h_Na1_6-20{milliV}+V)/2{milliV}));
    ode(m_Na1_6, t) = (m_Na1_6_inf-m_Na1_6)/(abs(tau_m_Na1_6/1000{millis_per_s})+epsilon_tau);
    ode(h_Na1_6, t) = (h_Na1_6_inf-h_Na1_6)/(abs(tau_h_Na1_6/1000{millis_per_s})+epsilon_tau);
    // ode(j, t) = (j_inf-j)/(abs(tau_j/1000{millis_per_s})+epsilon_tau);
    i_Na1_6 = g_Na1_6*g_Na1_6_mod*(V-E_Na)*pow(m_Na1_6, 3{dimensionless})*h_Na1_6;
    V_mid_hc = V_mid_c+11{milliV};
    V_den_hc = V_den_c;
    c_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_c)/V_den_c));
    hc_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_hc)/V_den_hc));
    c_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_c)/V_den_c));
    hc_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_hc)/V_den_hc));
    // This has changed a lot from the Belluzi paper. Double check with Harvey's data.
    tau_c = tau_c_min+(tau_c_max-tau_c_min)/(1{dimensionless}+exp((V_mid_c-20{milliV}+V)/V_den_c));
    // +1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));
    ode(c, t) = (c_inf-c)/(abs(tau_c/1000{millis_per_s})+epsilon_tau);
    ode(hc, t) = (hc_inf-hc)/(abs(tau_hc/1000{millis_per_s})+epsilon_tau);
    // TODO I have included a very rough cAMP inclusion here, improve this
    i_Ca_L = 1e6{nanoA_per_milliA}*sqr(F)*V*p_Ca*(1{dimensionless}+cAMP)/(R*T)*(Cai*exp(2e-3{V_per_milliV}*V*F/(R*T))-Cao)/(exp(2e-3{V_per_milliV}*V*F/(R*T))-1{dimensionless})*sqr(c)*hc;
    m_Kv2_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv2)/V_den_m_Kv2));
    m_Kv2_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv2)/V_den_m_Kv2));
    tau_m_Kv2 = 2.31{millis}+45{dimensionless}/(exp((V_mid_m_Kv2+V+10{milliV})/4{milliV})+exp(-(V_mid_m_Kv2+V+10{milliV})/4{milliV}));
    ode(m_Kv2, t) = (m_Kv2_inf-m_Kv2)/(abs(tau_m_Kv2/1000{millis_per_s})+epsilon_tau);
    i_Kv2 = g_Kv2*(V-E_K)*m_Kv2;
    m_Kv1_5_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv1_5)/V_den_m_Kv1_5));
    h_Kv1_5_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Kv1_5)/V_den_h_Kv1_5));
    m_Kv1_5_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv1_5)/V_den_m_Kv1_5));
    h_Kv1_5_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Kv1_5)/V_den_h_Kv1_5));
    tau_m_Kv1_5 = sel
      case V < 50{mV}:
        -0.1165{millis_per_milliV}*V+8.33{millis};
      otherwise:
        2{millis};
    endsel;
    tau_h_Kv1_5 = sel
      case V < 100{mV}:
        -15.5{millis_per_milliV}*V+1620{millis};
      otherwise:
        50{millis};
    endsel;
    ode(m_Kv1_5, t) = (m_Kv1_5_inf-m_Kv1_5)/(abs(tau_m_Kv1_5/1000{millis_per_s})+epsilon_tau);
    ode(h_Kv1_5, t) = (h_Kv1_5_inf-h_Kv1_5)/(abs(tau_h_Kv1_5/1000{millis_per_s})+epsilon_tau);
    i_Kv1_5 = g_Kv1_5*m_Kv1_5*h_Kv1_5*(V-E_K);
    m_Kv4_2_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_Kv4_2)/V_den_m_Kv4_2));
    h_Kv4_2_init = 1{dimensionless}/(1{dimensionless}+exp((V_rest_approx+V_mid_h_Kv4_2)/V_den_h_Kv4_2));
    m_Kv4_2_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_Kv4_2)/V_den_m_Kv4_2));
    h_Kv4_2_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_h_Kv4_2)/V_den_h_Kv4_2));
    // WAS
    // 1.0{millis}/(0.026{dimensionless}*exp(-0.026{per_milliV}*V)+35{dimensionless}*exp(0.136{per_milliV}*V));
    tau_m_Kv4_2 = sel
      case V < 50{mV}:
        1.0{millis}/(0.026{dimensionless}*exp(-0.026{per_milliV}*V)+35{dimensionless}*exp(0.136{per_milliV}*V));
      otherwise:
        1.7{millis}/(1{dimensionless}+exp((-42{milliV}-V)/(-26{milliV})))+0.34{millis};
    endsel;
    // WAS
    // tau_h_Kv4_2     = 0.01{millis_per_milliV}*V+6.7{millis};
    ode(m_Kv4_2, t) = (m_Kv4_2_inf-m_Kv4_2)/(abs(tau_m_Kv4_2/1000{millis_per_s})+epsilon_tau);
    ode(h_Kv4_2, t) = (h_Kv4_2_inf-h_Kv4_2)/(abs(tau_h_Kv4_2/1000{millis_per_s})+epsilon_tau);
    i_Kv4_2 = g_Kv4_2*pow(m_Kv4_2, 3{dimensionless})*h_Kv4_2*(V-E_K);
    V_mid_m_BK = V_mid_h_BK-3.1{milliV};
    m_BK_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_m_BK)/V_den_m_BK));
    h_BK_init = h_BK_min+(1{dimensionless}-h_BK_min)/(1{dimensionless}+exp((V_rest_approx+V_mid_h_BK)/V_den_h_BK));
    z_BK_init = 1{dimensionless}/(1{dimensionless}+z_BK_coeff/Cai_init);
    m_BK_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_m_BK)/V_den_m_BK));
    h_BK_inf = h_BK_min+(1{dimensionless}-h_BK_min)/(1{dimensionless}+exp((V+V_mid_h_BK)/V_den_h_BK));
    z_BK_inf = 1{dimensionless}/(1{dimensionless}+z_BK_coeff/Cai);
    // For z calculation, this is designed for Cai being simulated in a 100nm shell
    // underneath the membrane.
    // below tau_m min increase from 0.505 to 1.505 to allow for g_Na to not be instantly blocked.
    tau_m_BK = 1.505{millis}+1000{millis}/(exp((V+V_mid_m_BK+80.2{milliV})/10.1{milliV})+exp(-(V+V_mid_m_BK-39.5{milliV})/10{milliV}));
    tau_h_BK = 1.9{millis}+1000{millis}/(exp((V+V_mid_h_BK+16.5{milliV})/5.2{milliV})+exp(-(V+V_mid_h_BK-90.2{milliV})/12.9{milliV}));
    ode(m_BK, t) = (m_BK_inf-m_BK)/(abs(tau_m_BK/1000{millis_per_s})+epsilon_tau);
    ode(h_BK, t) = (h_BK_inf-h_BK)/(abs(tau_h_BK/1000{millis_per_s})+epsilon_tau);
    ode(z_BK, t) = (z_BK_inf-z_BK)/(abs(tau_z_BK/1000{millis_per_s})+epsilon_tau);
    i_KCa_BK = g_KCa_BK*pow(m_BK, 3{dimensionless})*h_BK*z_BK*(V-E_K);
    m_SK_init = pow(Cai_init, p_SK)/(pow(Ca_mid_m_SK, p_SK)+pow(Cai_init, p_SK));
    m_SK_inf = pow(Ca_bulk, p_SK)/(pow(Ca_mid_m_SK, p_SK)+pow(Ca_bulk, p_SK));
    ode(m_SK, t) = (m_SK_inf-m_SK)/(tau_m_SK/1000{millis_per_s});
    i_KCa_SK = g_KCa_SK*g_KCa_SK_mod*m_SK*(V-E_K);
    w_init = 1{dimensionless}/(1{dimensionless}+exp(-(V_rest_approx+V_mid_w+Delta_V_mid_w)/V_den_w));
    w_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_w+Delta_V_mid_w)/V_den_w));
    // tau_w = 400{millis}/(3.3{dimensionless}*exp((V+35{milliV})/10{milliV})+exp(-(V+35{milliV})/20{milliV}));
    // tau_w = tau_w_num/(3.3{dimensionless}*exp((V+V_mid_w)/20{milliV})+exp(-(V+V_mid_w)/30{milliV}));
    // below I slow down the increase.
    tau_w = tau_w_min+tau_w_num/(2.0{dimensionless}*exp((V+V_mid_w+Delta_V_mid_w)/15{milliV})+exp(-(V+V_mid_w+Delta_V_mid_w)/25{milliV}));
    // TODO I need to make sure tau doesn't go to zero so quickly when positive voltage, probably
    // by changing the 10 denominator to 20 or something similar. I HAVE CHANGED THIS, AND IT WORKS.
    // THIS HELPS CALIBRATE THE M-TYPE potassium channel!!
    // general i_M for Golomb and Martin
    ode(w, t) = (w_inf-w)/(tau_w/1000{millis_per_s});
    // This equation isn't correct for cAMP, m-type should still go to zero at small voltages
    i_M = g_M_mod*g_M*w*(V-E_K);
    i_leak_Na = g_leak_Na*(V-E_Na);
    i_leak_K = g_leak_K*(V-E_K);
    i_NaCa = k_NaCa*(exp(gamma_NaCa*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha_NaCa)/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))));
    i_NaK = k_NaK*(V+150{milliV})/(V+200{milliV})*pow(Nai, Nai_power_NaK)/(pow(Nai, Nai_power_NaK)+pow(Nai_mid_NaK, Nai_power_NaK))*Ko/(Ko+Ko_mid_NaK);
    m_IP3_inf = IP3/(IP3+d_1)*Cai/(Cai+d_5);
    Q_2 = d_2*(IP3+d_1)/(IP3+d_3);
    tau_hIP3 = 1{millis}/(a_2*(Q_2+Cai));
    h_IP3_inf = Q_2/(Q_2+Cai);
    ode(h_IP3, t) = (h_IP3_inf-h_IP3)/(tau_hIP3/1000{millis_per_s});
    j_IP3 = -k_IP3*pow(m_IP3_inf, 3{dimensionless})*pow(h_IP3, 3{dimensionless})*(Cai-Ca_ER);
    j_leak_Ca = -k_leak_Ca*(Ca_bulk-Ca_ER_pre);
    j_SERCA = -k_SERCA*(pow(Ca_bulk/K_mf, H_SERCA)-pow(Ca_ER_pre/K_mr, H_SERCA))/(1{dimensionless}+pow(Ca_bulk/K_mf, H_SERCA)+pow(Ca_ER_pre/K_mr, H_SERCA));
    c_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Cai-Cai_RyR_mid)/Cai_RyR_den));
    // deactivated by Ca_ER decreasing, so also activated by Ca_ER
    hc_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Ca_ER-Ca_ER_RyR_mid)/Ca_ER_RyR_den));
    ode(c_RyR, t) = (c_RyR_inf-c_RyR)/(tau_c_RyR/1000{millis_per_s});
    // tau_hc_RyR = tau_hc_RyR_min; // + 200{millis}/(exp((Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den)+exp(-(Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den));
    ode(hc_RyR, t) = (hc_RyR_inf-hc_RyR)/(tau_hc_RyR/1000{millis_per_s});
    // TODO include cAMP dependence
    // TODO should it be c_RyR^3, to be more similar to
    j_RyR = k_RyR*(Ca_ER-Cai)*pow(c_RyR, 3{dimensionless})*pow(hc_RyR, 3{dimensionless});
    ode(B_Cai, t) = k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    CaB_Cai = B_Ca_total-B_Cai;
    ode(B_Ca_bulk, t) = k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    CaB_Ca_bulk = B_Ca_total-B_Ca_bulk;
    ode(B_Ca_ER_pre, t) = k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    CaB_Ca_ER_pre = B_Ca_total-B_Ca_ER_pre;
    j_Ca_L = -i_Ca_L/(2{dimensionless}*F)*1e-9{A_per_nanoA};
    j_NaCa_Ca = i_NaCa/F*1e-9{A_per_nanoA};
    j_diffCa = -D_Ca*(Cai-Ca_bulk);
    j_diffCa_ER = D_Ca_ER*(Ca_ER_pre-Ca_ER);
    ode(Cai, t) = 1{dimensionless}/(Vol*c_SL)*(j_Ca_L+j_NaCa_Ca+j_IP3+j_RyR+j_diffCa)+k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    ode(Ca_bulk, t) = 1{dimensionless}/(Vol*c_bulk)*(j_SERCA-j_diffCa+j_leak_Ca)+k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    ode(Ca_ER_pre, t) = 1{dimensionless}/(Vol*c_ER_pre)*(-j_SERCA-j_leak_Ca-j_diffCa_ER)+k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    ode(Ca_ER, t) = 1{dimensionless}/(Vol*c_ER)*(-j_IP3-j_RyR+j_diffCa_ER);
    j_NaCa_Na = -3{dimensionless}*i_NaCa/F*1e-9{A_per_nanoA};
    j_NaK_Na = -3{dimensionless}*i_NaK/F*1e-9{A_per_nanoA};
    j_Na = -i_Na/F*1e-9{A_per_nanoA};
    j_Na1_6 = -i_Na1_6/F*1e-9{A_per_nanoA};
    // j_HCN_Na = max(-iHCN/F*1e-9{A_per_nanoA}, 0{mol_per_s});
    j_leak_Na = -i_leak_Na/F*1e-9{A_per_nanoA};
    ode(Nai, t) = (j_Na+j_NaCa_Na+j_NaK_Na+j_leak_Na)/Vol;
    j_Kv1_5 = -i_Kv1_5/F*1e-9{A_per_nanoA};
    j_Kv4_2 = -i_Kv4_2/F*1e-9{A_per_nanoA};
    j_Kv2 = -i_Kv2/F*1e-9{A_per_nanoA};
    j_KCa_BK = -i_KCa_BK/F*1e-9{A_per_nanoA};
    j_KCa_SK = -i_KCa_SK/F*1e-9{A_per_nanoA};
    j_KM = -i_M/F*1e-9{A_per_nanoA};
    j_NaK_K = 2{dimensionless}*i_NaK/F*1e-9{A_per_nanoA};
    // j_HCN_k = -max(iHCN/F*1e-9{A_per_nanoA}, 0{mol_per_s});
    j_leak_K = -i_leak_K/F*1e-9{A_per_nanoA};
    ode(Ki, t) = (j_Kv1_5+j_Kv4_2+j_Kv2+j_KCa_BK+j_KCa_SK+j_KM+j_NaK_K+j_leak_K)/Vol;
  enddef;

  def comp axon_SN as
    var t: second {interface: public};
    var C: picoF {interface: public};
    var R: megaOhm {interface: public};
    var V_in: milliV {interface: public};
    var I: nanoA {interface: public};
    var V_rest_approx: milliV {interface: public};
    var V: milliV {init: V_rest_approx, interface: public};
    var channel_ratio: dimensionless {interface: public};
    var I_channels: nanoA {interface: public};
    I = (V_in-V)/R;
    I_channels = I*channel_ratio;
    ode(V, t) = 1e6{milliV_per_kiloV}*(I+I_channels)/C;
  enddef;

  def comp var_SN as
    var t: second {interface: public};
    var R: J_per_mol_K {interface: public};
    var F: C_per_mol {interface: public};
    var T: kelvin {interface: public};
    var N_avo: per_mol {interface: public};
    var epsilon_tau: second {interface: public};
    var Vol: m3 {interface: public};
    var c_ER_pre: dimensionless {interface: public};
    var c_ER: dimensionless {interface: public};
    var c_SL: dimensionless {interface: public};
    var c_bulk: dimensionless {interface: public};
    var V: milliV {interface: public};
    var E_Ca: milliV {interface: public};
    var cAMP: dimensionless {interface: public};
    var i_Ca_N: nanoA {interface: public};
    var g_CaN: microS {interface: public};
    var c_init: dimensionless {interface: public};
    var c: dimensionless {init: c_init, interface: public};
    var hc_init: dimensionless {interface: public};
    var hc: dimensionless {init: hc_init, interface: public};
    var c_inf: dimensionless {interface: public};
    var hc_inf: dimensionless {interface: public};
    var tau_c: millis {interface: public};
    var tau_hc: millis {interface: public};
    var tau_c_min: millis {interface: public};
    var tau_c_max: millis {interface: public};
    var V_mid_c: milliV {interface: public};
    var V_den_c: milliV {interface: public};
    var V_mid_hc: milliV {interface: public};
    var V_den_hc: milliV {interface: public};
    var Nai: millimolar {interface: public};
    var Nao: millimolar {interface: public};
    var i_NaCa: nanoA {interface: public};
    var k_NaCa: nanoA {interface: public};
    var alpha_NaCa: dimensionless {interface: public};
    var gamma_NaCa: dimensionless {interface: public};
    var Ksat: dimensionless {interface: public};
    var KmCa: millimolar {interface: public};
    var KmNai: millimolar {interface: public};
    var j_IP3: mol_per_s {interface: public};
    var k_IP3: m3_per_s {interface: public};
    var k_leak_Ca: m3_per_s {interface: public};
    var m_IP3_inf: dimensionless {interface: public};
    var h_IP3_init: dimensionless {interface: public};
    var h_IP3: dimensionless {init: h_IP3_init, interface: public};
    var h_IP3_inf: dimensionless {interface: public};
    var tau_hIP3: millis {interface: public};
    var IP3: millimolar {interface: public};
    var a_2: per_millimolar {interface: public};
    var d_1: millimolar {interface: public};
    var d_2: millimolar {interface: public};
    var d_3: millimolar {interface: public};
    var d_5: millimolar {interface: public};
    var Q_2: millimolar {interface: public};
    var j_leak_Ca: mol_per_s {interface: public};
    var K_mf: millimolar {interface: public};
    var K_mr: millimolar {interface: public};
    var k_SERCA: mol_per_s {interface: public};
    var H_SERCA: dimensionless {interface: public};
    var j_SERCA: mol_per_s {interface: public};
    var j_RyR: mol_per_s {interface: public};
    var k_RyR: m3_per_s {interface: public};
    var c_RyR_inf: dimensionless {interface: public};
    var hc_RyR_inf: dimensionless {interface: public};
    var c_RyR: dimensionless {init: c_RyR_init, interface: public};
    var c_RyR_init: dimensionless {interface: public};
    var hc_RyR: dimensionless {init: hc_RyR_init, interface: public};
    var hc_RyR_init: dimensionless {interface: public};
    var Cai_RyR_mid: millimolar {interface: public};
    var Cai_RyR_den: millimolar {interface: public};
    var Ca_ER_RyR_mid: millimolar {interface: public};
    var Ca_ER_RyR_den: millimolar {interface: public};
    var Ca_ER_RyR_tau_mid: millimolar {interface: public};
    var Ca_ER_RyR_tau_den: millimolar {interface: public};
    var tau_c_RyR: millis {interface: public};
    var tau_hc_RyR: millis {interface: public};
    var Cai_init: millimolar {interface: public};
    var Cai: millimolar {init: Cai_init, interface: public};
    var Ca_ER_init: millimolar {interface: public};
    var Ca_ER: millimolar {init: Ca_ER_init, interface: public};
    var Cao: millimolar {interface: public};
    var j_Ca_N: mol_per_s {interface: public};
    var j_NaCa_Ca: mol_per_s {interface: public};
    var Ca_bulk: millimolar {init: Cai_init, interface: public};
    var j_diffCa: mol_per_s {interface: public};
    var D_Ca: m3_per_s {interface: public};
    var j_diffCa_ER: mol_per_s {interface: public};
    var D_Ca_ER: m3_per_s {interface: public};
    var Ca_ER_pre: millimolar {init: Ca_ER_init, interface: public};
    var B_Cai: millimolar {init: B_Ca_init, interface: public};
    var B_Ca_init: millimolar {interface: public};
    var B_Ca_total: millimolar {interface: public};
    var CaB_Cai: millimolar {interface: public};
    var B_Ca_bulk: millimolar {init: B_Ca_init, interface: public};
    var CaB_Ca_bulk: millimolar {interface: public};
    var B_Ca_ER_pre: millimolar {init: B_Ca_init, interface: public};
    var CaB_Ca_ER_pre: millimolar {interface: public};
    var k_bind_Ca: per_millimolar_s {interface: public};
    var k_unbind_Ca: per_s {interface: public};
    var k_bind_Ca_ER: per_millimolar_s {interface: public};
    var k_unbind_Ca_ER: per_s {interface: public};
    var NE_init: millimolar {interface: public};
    var NE: millimolar {init: NE_init, interface: public};
    var Cai_NE_base: millimolar {interface: public};
    var k_NE: per_s {interface: public};
    var k_NET: per_s {interface: public};
    c_bulk = 1{dimensionless}-c_SL-c_ER-c_ER_pre;
    E_Ca = R*T/F*ln(Cao/Cai)*1000{milliV_per_V};
    V_mid_hc = V_mid_c+11{milliV};
    V_den_hc = V_den_c;
    c_inf = 1{dimensionless}/(1{dimensionless}+exp(-(V+V_mid_c)/V_den_c));
    hc_inf = 1{dimensionless}/(1{dimensionless}+exp((V+V_mid_hc)/V_den_hc));
    tau_c = tau_c_min+(tau_c_max-tau_c_min)/(1{dimensionless}+exp((V_mid_c-20{milliV}+V)/V_den_c));
    // +1{dimensionless}/(0.343{per_millis}*exp(0.0925{per_milliV}*V)+1.88{per_millis}*exp(-0.00732{per_milliV}*V));
    // +1{dimensionless}/(0.242{per_millis}*exp(0.145{per_milliV}*V)+0.0434{per_millis}*exp(-0.0201{per_milliV}*V));
    ode(c, t) = (c_inf-c)/(abs(tau_c/1000{millis_per_s})+epsilon_tau);
    ode(hc, t) = (hc_inf-hc)/(abs(tau_hc/1000{millis_per_s})+epsilon_tau);
    // TODO Include cAMP effects?
    i_Ca_N = g_CaN*(V-E_Ca)*sqr(c)*hc;
    i_NaCa = k_NaCa*(exp(gamma_NaCa*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nai, 3{dimensionless})*Cao-exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))*pow(Nao, 3{dimensionless})*Cai*alpha_NaCa)/((pow(KmNai, 3{dimensionless})+pow(Nao, 3{dimensionless}))*(KmCa+Cao)*(1{dimensionless}+Ksat*exp((gamma_NaCa-1{dimensionless})*V*1e-3{V_per_milliV}*F/(R*T))));
    m_IP3_inf = IP3/(IP3+d_1)*Cai/(Cai+d_5);
    Q_2 = d_2*(IP3+d_1)/(IP3+d_3);
    tau_hIP3 = 1{millis}/(a_2*(Q_2+Cai));
    h_IP3_inf = Q_2/(Q_2+Cai);
    ode(h_IP3, t) = (h_IP3_inf-h_IP3)/(tau_hIP3/1000{millis_per_s});
    j_IP3 = -k_IP3*pow(m_IP3_inf, 3{dimensionless})*pow(h_IP3, 3{dimensionless})*(Cai-Ca_ER);
    j_leak_Ca = -k_leak_Ca*(Ca_bulk-Ca_ER_pre);
    j_SERCA = -k_SERCA*(pow(Ca_bulk/K_mf, H_SERCA)-pow(Ca_ER_pre/K_mr, H_SERCA))/(1{dimensionless}+pow(Ca_bulk/K_mf, H_SERCA)+pow(Ca_ER_pre/K_mr, H_SERCA));
    c_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Cai-Cai_RyR_mid)/Cai_RyR_den));
    // deactivated by Ca_ER decreasing, so also activated by Ca_ER
    hc_RyR_inf = 1{dimensionless}/(1{dimensionless}+exp(-(Ca_ER-Ca_ER_RyR_mid)/Ca_ER_RyR_den));
    ode(c_RyR, t) = (c_RyR_inf-c_RyR)/(tau_c_RyR/1000{millis_per_s});
    // tau_hc_RyR = tau_hc_RyR_min; // + 200{millis}/(exp((Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den)+exp(-(Ca_ER-Ca_ER_RyR_tau_mid)/Ca_ER_RyR_tau_den));
    ode(hc_RyR, t) = (hc_RyR_inf-hc_RyR)/(tau_hc_RyR/1000{millis_per_s});
    // TODO include cAMP dependence
    // TODO should it be c_RyR^3, to be more similar to
    j_RyR = k_RyR*(Ca_ER-Cai)*pow(c_RyR, 3{dimensionless})*pow(hc_RyR, 3{dimensionless});
    ode(B_Cai, t) = k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    CaB_Cai = B_Ca_total-B_Cai;
    ode(B_Ca_bulk, t) = k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    CaB_Ca_bulk = B_Ca_total-B_Ca_bulk;
    ode(B_Ca_ER_pre, t) = k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    CaB_Ca_ER_pre = B_Ca_total-B_Ca_ER_pre;
    j_Ca_N = -i_Ca_N/(2{dimensionless}*F)*1e-9{A_per_nanoA};
    j_NaCa_Ca = i_NaCa/F*1e-9{A_per_nanoA};
    j_diffCa = -D_Ca*(Cai-Ca_bulk);
    j_diffCa_ER = D_Ca_ER*(Ca_ER_pre-Ca_ER);
    ode(Cai, t) = 1{dimensionless}/(Vol*c_SL)*(j_Ca_N+j_NaCa_Ca+j_IP3+j_RyR+j_leak_Ca+j_diffCa)+k_unbind_Ca*CaB_Cai-k_bind_Ca*Cai*B_Cai;
    ode(Ca_bulk, t) = 1{dimensionless}/(Vol*c_bulk)*(j_SERCA-j_diffCa)+k_unbind_Ca*CaB_Ca_bulk-k_bind_Ca*Ca_bulk*B_Ca_bulk;
    ode(Ca_ER_pre, t) = 1{dimensionless}/(Vol*c_ER_pre)*(-j_SERCA-j_leak_Ca-j_diffCa_ER)+k_unbind_Ca_ER*CaB_Ca_ER_pre-k_bind_Ca_ER*Ca_ER_pre*B_Ca_ER_pre;
    ode(Ca_ER, t) = 1{dimensionless}/(Vol*c_ER)*(-j_IP3-j_RyR+j_diffCa_ER);
    ode(NE, t) = k_NE*max(Cai-Cai_NE_base, 0{millimolar})-k_NET*(NE-NE_init);
  enddef;
  def map between environment and soma_SN for
    vars time and t;
  enddef;
  def map between environment and axon_SN for
    vars time and t;
  enddef;
  def map between environment and var_SN for
    vars time and t;
  enddef;
  def map between global_parameters and soma_SN for
    vars R and R;
    vars F and F;
    vars T and T;
  enddef;
  def map between global_parameters and var_SN for
    vars R and R;
    vars F and F;
    vars T and T;
    vars N_avo and N_avo;
  enddef;
  def map between instance_parameters and soma_SN for
    vars soma_SN_c_ER_pre and c_ER_pre;
    vars soma_SN_c_ER and c_ER;
    vars soma_SN_c_SL and c_SL;
    vars soma_SN_epsilon_tau and epsilon_tau;
    vars soma_SN_Vol and Vol;
    vars I_in and I_in;
    vars Cm and Cm;
    vars soma_SN_V_rest_approx and V_rest_approx;
    vars C_sensed and C_sensed;
    vars R_diffSensed and R_diffSensed;
    vars g_Na and g_Na;
    vars g_Na_mod and g_Na_mod;
    vars V_mid_m and V_mid_m;
    vars V_den_m and V_den_m;
    vars V_mid_h and V_mid_h;
    vars V_den_h and V_den_h;
    vars tau_h_min and tau_h_min;
    vars tau_h_max and tau_h_max;
    vars k_thresh_m and k_thresh_m;
    vars k_thresh_h and k_thresh_h;
    vars g_Na1_6 and g_Na1_6;
    vars g_Na1_6_mod and g_Na1_6_mod;
    vars V_mid_m_Na1_6 and V_mid_m_Na1_6;
    vars V_den_m_Na1_6 and V_den_m_Na1_6;
    vars V_mid_h_Na1_6 and V_mid_h_Na1_6;
    vars V_den_h_Na1_6 and V_den_h_Na1_6;
    vars tau_h_Na1_6_min and tau_h_Na1_6_min;
    vars tau_h_Na1_6_max and tau_h_Na1_6_max;
    vars p_Ca and p_Ca;
    vars soma_SN_tau_hc and tau_hc;
    vars soma_SN_tau_c_min and tau_c_min;
    vars soma_SN_tau_c_max and tau_c_max;
    vars soma_SN_V_mid_c and V_mid_c;
    vars soma_SN_V_den_c and V_den_c;
    vars g_Kv2 and g_Kv2;
    vars V_mid_m_Kv2 and V_mid_m_Kv2;
    vars V_den_m_Kv2 and V_den_m_Kv2;
    vars g_Kv1_5 and g_Kv1_5;
    vars V_mid_m_Kv1_5 and V_mid_m_Kv1_5;
    vars V_den_m_Kv1_5 and V_den_m_Kv1_5;
    vars V_mid_h_Kv1_5 and V_mid_h_Kv1_5;
    vars V_den_h_Kv1_5 and V_den_h_Kv1_5;
    vars g_Kv4_2 and g_Kv4_2;
    vars tau_h_Kv4_2 and tau_h_Kv4_2;
    vars V_mid_m_Kv4_2 and V_mid_m_Kv4_2;
    vars V_den_m_Kv4_2 and V_den_m_Kv4_2;
    vars V_mid_h_Kv4_2 and V_mid_h_Kv4_2;
    vars V_den_h_Kv4_2 and V_den_h_Kv4_2;
    vars g_KCa_BK and g_KCa_BK;
    vars h_BK_min and h_BK_min;
    vars z_BK_coeff and z_BK_coeff;
    vars V_den_m_BK and V_den_m_BK;
    vars V_mid_h_BK and V_mid_h_BK;
    vars V_den_h_BK and V_den_h_BK;
    vars tau_z_BK and tau_z_BK;
    vars g_KCa_SK and g_KCa_SK;
    vars g_KCa_SK_mod and g_KCa_SK_mod;
    vars tau_m_SK and tau_m_SK;
    vars Ca_mid_m_SK and Ca_mid_m_SK;
    vars p_SK and p_SK;
    vars g_M and g_M;
    vars g_M_mod and g_M_mod;
    vars soma_SN_cAMP and cAMP;
    vars delta_gM and delta_gM;
    vars tau_w_num and tau_w_num;
    vars V_mid_w and V_mid_w;
    vars Delta_V_mid_w and Delta_V_mid_w;
    vars V_den_w and V_den_w;
    vars tau_w_min and tau_w_min;
    vars g_leak_Na and g_leak_Na;
    vars g_leak_K and g_leak_K;
    vars soma_SN_k_NaCa and k_NaCa;
    vars soma_SN_alpha_NaCa and alpha_NaCa;
    vars soma_SN_gamma_NaCa and gamma_NaCa;
    vars soma_SN_Ksat and Ksat;
    vars soma_SN_KmCa and KmCa;
    vars soma_SN_KmNai and KmNai;
    vars k_NaK and k_NaK;
    vars Nai_mid_NaK and Nai_mid_NaK;
    vars Ko_mid_NaK and Ko_mid_NaK;
    vars Nai_power_NaK and Nai_power_NaK;
    vars soma_SN_k_IP3 and k_IP3;
    vars soma_SN_k_leak_Ca and k_leak_Ca;
    vars soma_SN_h_IP3_init and h_IP3_init;
    vars soma_SN_IP3 and IP3;
    vars soma_SN_a_2 and a_2;
    vars soma_SN_d_1 and d_1;
    vars soma_SN_d_2 and d_2;
    vars soma_SN_d_3 and d_3;
    vars soma_SN_d_5 and d_5;
    vars soma_SN_K_mf and K_mf;
    vars soma_SN_K_mr and K_mr;
    vars soma_SN_k_SERCA and k_SERCA;
    vars soma_SN_H_SERCA and H_SERCA;
    vars soma_SN_k_RyR and k_RyR;
    vars soma_SN_c_RyR_init and c_RyR_init;
    vars soma_SN_hc_RyR_init and hc_RyR_init;
    vars soma_SN_Cai_RyR_mid and Cai_RyR_mid;
    vars soma_SN_Cai_RyR_den and Cai_RyR_den;
    vars soma_SN_Ca_ER_RyR_mid and Ca_ER_RyR_mid;
    vars soma_SN_Ca_ER_RyR_den and Ca_ER_RyR_den;
    vars soma_SN_Ca_ER_RyR_tau_mid and Ca_ER_RyR_tau_mid;
    vars soma_SN_Ca_ER_RyR_tau_den and Ca_ER_RyR_tau_den;
    vars soma_SN_tau_c_RyR and tau_c_RyR;
    vars soma_SN_tau_hc_RyR and tau_hc_RyR;
    vars soma_SN_Cai_init and Cai_init;
    vars soma_SN_Ca_ER_init and Ca_ER_init;
    vars soma_SN_Cao and Cao;
    vars soma_SN_D_Ca and D_Ca;
    vars soma_SN_D_Ca_ER and D_Ca_ER;
    vars soma_SN_B_Ca_init and B_Ca_init;
    vars soma_SN_B_Ca_total and B_Ca_total;
    vars soma_SN_k_bind_Ca and k_bind_Ca;
    vars soma_SN_k_unbind_Ca and k_unbind_Ca;
    vars soma_SN_k_bind_Ca_ER and k_bind_Ca_ER;
    vars soma_SN_k_unbind_Ca_ER and k_unbind_Ca_ER;
    vars Nai_init and Nai_init;
    vars soma_SN_Nao and Nao;
    vars Ki_init and Ki_init;
    vars Ko and Ko;
  enddef;
  def map between instance_parameters and axon_SN for
    vars C and C;
    vars R and R;
    vars axon_SN_V_rest_approx and V_rest_approx;
    vars channel_ratio and channel_ratio;
  enddef;
  def map between instance_parameters and var_SN for
    vars var_SN_epsilon_tau and epsilon_tau;
    vars var_SN_Vol and Vol;
    vars var_SN_c_ER_pre and c_ER_pre;
    vars var_SN_c_ER and c_ER;
    vars var_SN_c_SL and c_SL;
    vars var_SN_cAMP and cAMP;
    vars g_CaN and g_CaN;
    vars c_init and c_init;
    vars hc_init and hc_init;
    vars var_SN_tau_hc and tau_hc;
    vars var_SN_tau_c_min and tau_c_min;
    vars var_SN_tau_c_max and tau_c_max;
    vars var_SN_V_mid_c and V_mid_c;
    vars var_SN_V_den_c and V_den_c;
    vars Nai and Nai;
    vars var_SN_Nao and Nao;
    vars var_SN_k_NaCa and k_NaCa;
    vars var_SN_alpha_NaCa and alpha_NaCa;
    vars var_SN_gamma_NaCa and gamma_NaCa;
    vars var_SN_Ksat and Ksat;
    vars var_SN_KmCa and KmCa;
    vars var_SN_KmNai and KmNai;
    vars var_SN_k_IP3 and k_IP3;
    vars var_SN_k_leak_Ca and k_leak_Ca;
    vars var_SN_h_IP3_init and h_IP3_init;
    vars var_SN_IP3 and IP3;
    vars var_SN_a_2 and a_2;
    vars var_SN_d_1 and d_1;
    vars var_SN_d_2 and d_2;
    vars var_SN_d_3 and d_3;
    vars var_SN_d_5 and d_5;
    vars var_SN_K_mf and K_mf;
    vars var_SN_K_mr and K_mr;
    vars var_SN_k_SERCA and k_SERCA;
    vars var_SN_H_SERCA and H_SERCA;
    vars var_SN_k_RyR and k_RyR;
    vars var_SN_c_RyR_init and c_RyR_init;
    vars var_SN_hc_RyR_init and hc_RyR_init;
    vars var_SN_Cai_RyR_mid and Cai_RyR_mid;
    vars var_SN_Cai_RyR_den and Cai_RyR_den;
    vars var_SN_Ca_ER_RyR_mid and Ca_ER_RyR_mid;
    vars var_SN_Ca_ER_RyR_den and Ca_ER_RyR_den;
    vars var_SN_Ca_ER_RyR_tau_mid and Ca_ER_RyR_tau_mid;
    vars var_SN_Ca_ER_RyR_tau_den and Ca_ER_RyR_tau_den;
    vars var_SN_tau_c_RyR and tau_c_RyR;
    vars var_SN_tau_hc_RyR and tau_hc_RyR;
    vars var_SN_Cai_init and Cai_init;
    vars var_SN_Ca_ER_init and Ca_ER_init;
    vars var_SN_Cao and Cao;
    vars var_SN_D_Ca and D_Ca;
    vars var_SN_D_Ca_ER and D_Ca_ER;
    vars var_SN_B_Ca_init and B_Ca_init;
    vars var_SN_B_Ca_total and B_Ca_total;
    vars var_SN_k_bind_Ca and k_bind_Ca;
    vars var_SN_k_unbind_Ca and k_unbind_Ca;
    vars var_SN_k_bind_Ca_ER and k_bind_Ca_ER;
    vars var_SN_k_unbind_Ca_ER and k_unbind_Ca_ER;
    vars NE_init and NE_init;
    vars Cai_NE_base and Cai_NE_base;
    vars k_NE and k_NE;
    vars k_NET and k_NET;
  enddef;
  def map between soma_SN and axon_SN for
    vars I_out and I;
    vars V and V_in;
  enddef;
  def map between axon_SN and var_SN for
    vars V and V;
  enddef;
enddef;
